PsychoPy2experiment version="2023.2.3"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = u'data/%s/%s_%s' % (expInfo['Nombre'], expInfo['Nombre'], expInfo['date'])
  Experiment info = {'Nombre': '', 'Edad': '', 'Laterialidad': "['Derecha', 'Izquierda', '']", 'Vuelta': "['Motor/NoMotor1','Motor/NoMotor2','Social/NoSocial1','Social/NoSocial2']"}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save wide csv file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = -1.0000, -1.0000, -1.0000
  expName = paradigma
  keyboardBackend = ioHub
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Routines
  Routine audio2
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    CodeComponent arduiono_pulse2
      Code Type = Py
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      Begin Routine:
        recorder._send_pulse_to_arduino()
    SoundComponent sound_2
      sound = $path2
      startVal [time (s)] = 0.0
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  Routine audio
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    CodeComponent arduino_pulse
      Code Type = Py
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      Begin Routine:
        recorder._send_pulse_to_arduino()
    SoundComponent audio1
      sound = $path1
      startVal [time (s)] = 0.0
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  Routine grabacion2
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  Routine minute
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        recorder._send_pulse_to_arduino()
    TextComponent blank
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Tomese un minuto para pensar. Cuando el minuto termine se comenzara a grabar.
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine recording
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    ImageComponent mic_image
      image = resources/microphone-png-16.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        recorder.start_recording(f"data/{expInfo['Nombre']}/{audios_dict[nombre_vuelta][0]}")
      End Routine:
        recorder.stop_recording()
    KeyboardComponent interrupt
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent goodbye_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        ¡Muchas gracias por participar!

        Presione ESPACIO para salir.
    KeyboardComponent end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      End Experiment:
        recorder._serial.close()
  Routine recording_2
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    ImageComponent mic_image_2
      image = resources/microphone-png-16.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        recorder.start_recording(f"data/{expInfo['Nombre']}/{audios_dict[nombre_vuelta][1]}")
      End Routine:
        recorder.stop_recording()
    KeyboardComponent interrupt_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Ahora escuchará una breve historia. Luego la idea es que la narre con sus propias palabras.

        Por favor, cuando este listo presione ESPACIO, cierre sus ojos y concéntrese en la historia para luego poder contarla con el mayor detalle posible.

        Pulse ESPACIO para continuar.
    KeyboardComponent comenzar_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        from audioRecorder import AudioRecorder
        import serial.tools.list_ports

        def list_serial_ports():
            ports = serial.tools.list_ports.comports()
            arduino_ports = []

            for port in ports:
                # You can add more checks here based on the specific attributes of your Arduino
                if 'Arduino' in port.description or 'CH340' in port.description:
                    arduino_ports.append(port.device)

            return arduino_ports[0]
      Begin Experiment:
        puerto = list_serial_ports()
        recorder = AudioRecorder(mic_id = 0, sample_rate = 48000, channels = 1, arduino_port = puerto)

        audios_dict ={
            'Motor/NoMotor1': ['Motor1.wav', 'NoMotor1.wav'],
            'Motor/NoMotor2': ['Motor2.wav', 'NoMotor2.wav'],
            'Social/NoSocial1': ['Social1.wav', 'NoSocial1.wav'],
            'Social/NoSocial2': ['Social2.wav', 'NoSocial2.wav']
        }
        nombre_vuelta = expInfo['Vuelta']
        path1 = 'resources/audios/' + audios_dict[nombre_vuelta][0]
        path2 = 'resources/audios/' + audios_dict[nombre_vuelta][1]
  Routine instructions2
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Nuevamente, escuchara un audio y se pedira que vuelva a contar la historia

        Presione ESPACIO para continuar.
Flow
  Routine instructions
  Routine audio
  Routine minute
  Routine recording
  Routine instructions2
  Routine audio2
  Routine minute
  Routine recording_2
  Routine end
